PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon_2
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [frame N] = 10
      stopVal [duration (frames)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 100000
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    Routine trial
  LoopTerminator trials
